begintemplate DGC

public all, soma, somaprox, prox, distal, allaxon, axon, ais, hillock, apical, sec_soma, sec_apical
public is_art, position, connect2target

objref all, soma, prox, somaprox, distal, apical, hillock, ais, axon, allaxon // Create objects for subsections

create sec_soma
create sec_apical[33]		/* creates the major regions */
create sec_hillock
create sec_ais
create sec_axon
  
proc init() {
       if (numarg() > 0) {
           parameters_from_python($o1)
       } else {
           parameters() 
       }

    celldef()
}

proc parameters() {

     celsius = 25 // temperature
     v_init = -80 // resting potential
     nao0 = 150
     ko0 = 4

     // Passive properties

     Ra0 = 200 // input resistance
     cm0 = 1 // membrane specific conductance

     g_pas0 = 2.6315e-5
       
     // Conductance properties

     prox_gbar_Na = 0.03
     ais_sh_nax = 0
     ais_sha_nax = 0

     hillock_sh_nax = 0
     hillock_sha_nax = 0

     prox_gkbar_Kir = 0.000353903
     
     prox_gbar_fKDR = .005
     prox_gbar_sKDR = .016

     prox_gmax_KA = 0.02
     prox_gmax_KA_scale = 0.1
        
     prox_gtcabar_Ca = 0.00015
     prox_gncabar_Ca = 0.002
     prox_glcabar_Ca = 0.010
     prox_gbkbar_CadepK = 0.0003
     prox_gskbar_CadepK = 0.0005

     prox_gbar_sAHP = 0.001
     prox_cac_sAHP = 0.025

     apical_gbar_Na = 0.018

     apical_gkbar_Kir = 0.000353903

     apical_gmax_KA_scale = 0.02
     apical_gmax_KA_shift = 300.0
     apical_gbar_fKDR = 0.002

     ais_gbar_nax  = 0.04
     ais_gbar_fKDR = 0.03
     ais_gmax_KA = 0.004

     hillock_gbar_nax  = 0.01
     hillock_gbar_fKDR = 0.02
     hillock_gmax_KA = 0.002

     axon_gbar_scale = 0.33
}      


proc parameters_from_python() { localobj param_dict
    
    param_dict = $o1
    
    celsius = param_dict.__getitem__("celsius")
    v_init = param_dict.__getitem__("v_init")
    nao0 = param_dict.__getitem__("nao0")
    ko0 = param_dict.__getitem__("ko0")
    
    Ra0 = param_dict.__getitem__("Ra0")
    cm0 = param_dict.__getitem__("cm0")
    g_pas0 = param_dict.__getitem__("g_pas0")

    prox_gbar_Na = param_dict.__getitem__("prox_gbar_Na")

    prox_gkbar_Kir = param_dict.__getitem__("prox_gkbar_Kir")
    prox_gbar_fKDR = param_dict.__getitem__("prox_gbar_fKDR")
    prox_gbar_sKDR = param_dict.__getitem__("prox_gbar_sKDR")

    prox_gmax_KA = param_dict.__getitem__("prox_gmax_KA")
    prox_gmax_KA_scale = param_dict.__getitem__("prox_gmax_KA_scale")
        
    prox_gtcabar_Ca = param_dict.__getitem__("prox_gtcabar_Ca")
    prox_gncabar_Ca = param_dict.__getitem__("prox_gncabar_Ca")
    prox_glcabar_Ca = param_dict.__getitem__("prox_glcabar_Ca")
    prox_gbkbar_CadepK = param_dict.__getitem__("prox_gbkbar_CadepK")
    prox_gskbar_CadepK = param_dict.__getitem__("prox_gskbar_CadepK")
    prox_gbar_sAHP = param_dict.__getitem__("prox_gbar_sAHP")
    prox_cac_sAHP = param_dict.__getitem__("prox_cac_sAHP")
    
    apical_gbar_Na = param_dict.__getitem__("apical_gbar_Na")
    
    apical_gmax_KA_scale = param_dict.__getitem__("apical_gmax_KA_scale")
    apical_gmax_KA_shift = param_dict.__getitem__("apical_gmax_KA_shift")
    apical_gbar_fKDR = param_dict.__getitem__("apical_gbar_fKDR")
    apical_gkbar_Kir = param_dict.__getitem__("apical_gkbar_Kir")

    ais_sh_nax  = param_dict.__getitem__("ais_sh_nax")
    ais_sha_nax  = param_dict.__getitem__("ais_sha_nax")
    ais_gbar_nax  = param_dict.__getitem__("ais_gbar_nax")
    ais_gbar_fKDR = param_dict.__getitem__("ais_gbar_fKDR")
    ais_gmax_KA = param_dict.__getitem__("ais_gmax_KA")

    hillock_sh_nax  = param_dict.__getitem__("hillock_sh_nax")
    hillock_sha_nax  = param_dict.__getitem__("hillock_sha_nax")
    hillock_gbar_nax  = param_dict.__getitem__("hillock_gbar_nax")
    hillock_gbar_fKDR = param_dict.__getitem__("hillock_gbar_fKDR")
    hillock_gmax_KA = param_dict.__getitem__("hillock_gmax_KA")
    
    axon_gbar_scale = param_dict.__getitem__("axon_gbar_scale")
    
}


// Code from CA1 pyramidal cell model by Tomko et al., 2021
proc distribute_distance(){local i, j, k, vv, x, sc, shift, nlocals localobj sl, localnames, localvals
    strdef stmp, distfunc, mech, varname

  sl = $o1
  mech = $s2
  distfunc = $s3
  nlocals = (numarg()-3) / 2
  for j=0,nlocals-1 {
      i = 4 + j*2
      varname = $si
      i = 4 + j*2 + 1
      vv = $i
      sprint(stmp, "%s = %g", varname, vv)
      execute(stmp)
    } 
  sec_soma distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    sprint(stmp, distfunc, secname(), x, distance(x), sc, shift)
    execute(stmp)
  }
}

func lambda_f() { local i, x1, x2, d1, d2, lam
    if (n3d() < 2) {
        return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
    }
    x1 = arc3d(0)
    d1 = diam3d(0)
    lam = 0
    for i=1, n3d()-1 {
        x2 = arc3d(i)
        d2 = diam3d(i)
        lam += (x2 - x1)/sqrt(d1 + d2)
        x1 = x2   d1 = d2
    }
    //  length of the section in units of lambda
    lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)
    
    return L/lam
}


proc celldef() { localobj reader
  topol()
  geom()
  geom_nseg()
  geom_rescale()
  geom_nseg()
  subsets()
  biophys()
  e_pas_init()
}

proc topol() { local i

  for i = 0, 1 connect sec_apical[i](0), sec_soma(0)
  connect sec_apical[2](0), sec_apical[0](0.5)
  for i = 3, 4 connect sec_apical[i](0), sec_apical(1)
  for i = 5, 6 connect sec_apical[i](0), sec_apical[1](1)
  for i = 7, 8 connect sec_apical[i](0), sec_apical[2](1)
  for i = 9, 10 connect sec_apical[i](0), sec_apical[3](1)
  for i = 11, 12 connect sec_apical[i](0), sec_apical[4](1)
  for i = 13, 14 connect sec_apical[i](0), sec_apical[5](1)
  for i = 15, 16 connect sec_apical[i](0), sec_apical[6](1)
  for i = 17, 18 connect sec_apical[i](0), sec_apical[7](1)
  for i = 19, 20 connect sec_apical[i](0), sec_apical[8](1)
  for i = 21, 22 connect sec_apical[i](0), sec_apical[9](1)
  for i = 23, 24 connect sec_apical[i](0), sec_apical[14](1)
  for i = 25, 26 connect sec_apical[i](0), sec_apical[16](1)
  for i = 27, 28 connect sec_apical[i](0), sec_apical[17](1)
  for i = 29, 30 connect sec_apical[i](0), sec_apical[18](1)
  for i = 31, 32 connect sec_apical[i](0), sec_apical[23](1)

  connect sec_hillock(0), sec_soma(1)
  connect sec_ais(0), sec_hillock(1)
  connect sec_axon(0), sec_ais(1)
}

proc geom() {

  sec_soma { nseg=5 L=18 diam=10 }
  
  sec_apical {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(0, 0, 0, 3.6)
	pt3dadd(-3.25, 6.94, -2.26, 3.6)
	pt3dadd(-6.5, 11.88, -4.52, 3.6)
	pt3dadd(-7.84, 17.04, -6.06, 2.7)
	pt3dadd(-8.37, 19.06, -6.06, 2.7)
	pt3dadd(-8.37, 21.54, -6.06, 2.25)
	pt3dadd(-8.37, 22.89, -6.06, 2.25)
  }
  sec_apical[1] {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
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  }

  sec_hillock { nseg=20 L=20 diam(0:1)=5.0:1.4 } // Hillock

  sec_ais { nseg=30 L=30 diam(0:1)=1.4:0.5 } // Axon initial segment

  sec_axon { nseg=15 L=150 diam=0.5 } // Axon proper


  define_shape()
}

proc subsets() { local i // procedure defines subsections

    // subsections: soma/prox region, distal region, apical, hillock, AIS, and axon

    proxlimit = 50 // maximum limit in microns of the proximal region

    all = new SectionList()
    soma = new SectionList()
    somaprox = new SectionList()
    prox = new SectionList()	
    distal = new SectionList()	
    apical = new SectionList()

    sec_soma { soma.append() somaprox.append() all.append() }
    
    napical = 33
    access sec_soma
	distance()
	for i=0,napical-1 {
        // define which dendrites are proximal and distal
        access sec_apical[i]
		 howfar = distance(1, 0.5)
		 if (howfar <  proxlimit) sec_apical[i]  { prox.append() somaprox.append() }
		 if (howfar >= proxlimit) sec_apical[i]  distal.append()
                 apical.append()
                 all.append()
	}

    
    hillock = new SectionList()
    ais = new SectionList()
    axon = new SectionList()
    allaxon = new SectionList()

    sec_hillock { hillock.append() allaxon.append() all.append() }
    sec_ais { ais.append() allaxon.append() all.append() }
    sec_axon { axon.append() allaxon.append() all.append() }
}

//  Biophysics initialization

proc biophys() {

    // Kir conductance
    Kir_vhalfl_fit_ = -98.923594  		// for Botzman I/V curve, fitted
    Kir_kl_fit_     = 10.888538 		// for Botzman I/V curve, fitted
    Kir_q10_fit_    = 1.			// temperature factor, set to 1
    Kir_vhalft_fit_ = 67.0828           	// 3 values for tau func from Stegen et al. 2011
    Kir_at_fit_     = 0.00610779
    Kir_bt_fit_     = 0.0817741

forall {
    v = v_init

    Ra = Ra0
    cm = cm0
    
    insert pas
    g_pas = g_pas0

    e_pas = v 

    insert K_conc
    insert Na_conc

    nao0_Na_conc = nao0
    nai0_Na_conc = 5    
    ko0_K_conc = ko0

}

forsec somaprox {// Somatic and proximal dendrite conductances

        insert Na_Aradi
        gbar_Na_Aradi = prox_gbar_Na

	insert fKDR // Aradi and Holmes (1999) fast and slow KDR channels
	gbar_fKDR = prox_gbar_fKDR // g_fKDR
	
	insert sKDR
	gbar_sKDR = prox_gbar_sKDR // g_fKDR

        insert KA
        gmax_KA = prox_gmax_KA * prox_gmax_KA_scale

        insert Kir21
        gkbar_Kir21 = prox_gkbar_Kir

		mg_i_Kir21 = 4
		spm_i_Kir21 = 1
		gsub_Kir21 = 0.25
		fac_Kir21 = 0.005
		vshiftbs_Kir21 = 0
		vshiftbb_Kir21 = 0
		b_Kir21 = 0.105
		shiftmg_Kir21 = 0.5
		cas_Kir21 = 0.142857
		As_Kir21 = 0.2

        insert Ca_Aradi
        gtcabar_Ca_Aradi = prox_gtcabar_Ca
        gncabar_Ca_Aradi = prox_gncabar_Ca
        glcabar_Ca_Aradi = prox_glcabar_Ca

        insert CadepK_Aradi
        gbkbar_CadepK_Aradi = prox_gbkbar_CadepK
        gskbar_CadepK_Aradi = prox_gskbar_CadepK

        insert sAHP
        gbar_sAHP = prox_gbar_sAHP
        cac_sAHP = prox_cac_sAHP

        insert Ca_conc
}


forsec distal {	// dendritic conductances

    insert Na_Aradi
    gbar_Na_Aradi = apical_gbar_Na

    insert KA   				
    gmax_KA = .01
    
    // KA channel with density increasing towards distal dendrite (Kim 2018)
    // Uniform density Na (Kim 2018)
    // Low uniform density Kdr (Kim 2018)
    insert fKDR
    gbar_fKDR = apical_gbar_fKDR


    insert Kir21
    gkbar_Kir21  = apical_gkbar_Kir

		mg_i_Kir21 = 4
		spm_i_Kir21 = 1
		gsub_Kir21 = 0.25
		fac_Kir21 = 0.005
		vshiftbs_Kir21 = 0
		vshiftbb_Kir21 = 0
		b_Kir21 = 0.105
		shiftmg_Kir21 = 0.5
		cas_Kir21 = 0.142857
		As_Kir21 = 0.2

    insert K_conc
    insert Na_conc

    Ra = Ra0


}

                     

distribute_distance(distal, "gmax_KA", "(1.0/(1.0 + exp(apical_gmax_KA_scale*(%.17g - apical_gmax_KA_shift))))*prox_gmax_KA", "apical_gmax_KA_scale", apical_gmax_KA_scale, "apical_gmax_KA_shift", apical_gmax_KA_shift, "prox_gmax_KA", prox_gmax_KA)

forsec hillock { // hillock conductances

       insert nax
       gbar_nax = hillock_gbar_nax
       sh_nax = hillock_sh_nax
       sha_nax = hillock_sha_nax
         
       insert fKDR
       gbar_fKDR = hillock_gbar_fKDR

       insert KA
       gmax_KA = hillock_gmax_KA

       insert K_conc
       insert Na_conc
}

forsec ais { // AIS conductances

       insert nax
       gbar_nax = ais_gbar_nax
       sh_nax = ais_sh_nax
       sha_nax = ais_sha_nax
         
       insert fKDR
       gbar_fKDR = ais_gbar_fKDR

       insert KA
       gmax_KA = ais_gmax_KA

       insert K_conc
       insert Na_conc
}

forsec axon {

       insert nax
       gbar_nax = ais_gbar_nax * axon_gbar_scale    
       sh_nax = ais_sh_nax
       sha_nax = ais_sha_nax

       insert fKDR
       gbar_fKDR = ais_gbar_fKDR * axon_gbar_scale

       insert KA
       gmax_KA = ais_gmax_KA * axon_gbar_scale
        
       insert K_conc
       insert Na_conc

}      

//  Basic parameters for all compartments


}

//  Reinitialization procedure


proc e_pas_init() {

    v_init_e_pas = -70

    forall {
           v = v_init_e_pas // all compartments reset Vrest
           e_pas = v_init_e_pas
    }

}

proc geom_rescale() { local x

    napical = 33
    dredux = .67 // Rescale dendritic diameter by this factor
    sec_soma distance(0, 0.5)

    for i=0,napical-1 {
        // rescale dendritic diameter
        sec_apical[i] {
                      
                       for j = 0, n3d()-1 {
                          x = arc3d(j) / L
                          howfar = distance(1, x)
                          s = howfar / 100
                          if (s > dredux) { s = dredux }
                          pt3dchange(j, diam3d(j)*(1 - s))
                      }             
        }
    }
}

proc geom_nseg() { local freq, d_lambda
    
    freq = 100 // Hz, frequency at which AC length constant will be computed
    d_lambda = 0.05
    
    soma area(0.5)
    forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.999)/2)*2 + 1  }
    sec_soma { nseg=5 L=18 diam(0:0.5)=3.6:10.0 diam(0.5:1.0)=10.0:3.6  }

}


func is_art()  { return 0 }

proc position() { local i
    
    forall {
        for i = 0, n3d()-1 {
            pt3dchange(i, $1-xx+x3d(i), $2-yy+y3d(i), $3-zz+z3d(i), diam3d(i))
        }
    }
    xx = $1  yy = $2  zz = $3
}

endtemplate DGC

