
xopen("DGC_test_from_forest_na8st.hoc")

proc main() { local i, ij, gid strdef cmd, local_forest_path, local_results_path
    
    // task_id and batch_size are variables that should be set on the
    // command line, e.g. nrniv -c "task_id=1" -c "batch_size=20"
    
    load_file ("DGC_test_from_forest_config.hoc")
    
    sprint (local_forest_path, "%s/%03d", forest_path, task_id)
    sprint (local_results_path, "%s/%03d", results_path, task_id)
    
    sprint(cmd, "mkdir -p %s", local_results_path)
    system(cmd)
    
    for (gid=task_id; gid <= ncells; gid += batch_size)  {
        
        passive_test (local_forest_path, local_results_path, gid)
        single_ap_test (local_forest_path, local_results_path, gid)
        ap_rate_test (local_forest_path, local_results_path, gid)
    }
}

main()

