

load_file("nrngui.hoc")
load_file("rn.hoc")

load_file("DGC_protocol.ses")

// Load the granule cell template
xopen("DGC_template_from_file_na8st.hoc")


objref gc
//gc = new DGC(1, "DGC_dims.dat","DGC_points.dat","DGC_dendrite_topology.dat","DGC_dendrite_soma_topology.dat","DGC_spine_density.dat")
gc = new DGC(1, "/home/igr/src/model/DGC_forest/DGC_dims_004.dat","/home/igr/src/model/DGC_forest/DGC_dendrite_points_004.dat","/home/igr/src/model/DGC_forest/DGC_dendrite_topology_004.dat","/home/igr/src/model/DGC_forest/DGC_dendrite_soma_topology_004.dat","/home/igr/src/model/DGC_forest/DGC_spine_density_004.dat")

prelength = 1000
mainlength = 2000
vinit = -75

//**********************************************************************
proc simulate() { local preDT, mainDT, logsize  localobj logfile, tlog, Vlog_soma, Vlog_axon
    
    finitialize(vinit)
    
    mainDT = 0.025
    preDT = 0.025
    
    cvode_active (1)
    
    dt = preDT
    tstop = prelength
    fadvance()
    
    if ( stoprun == 1) return
    
    dt = mainDT
    continuerun(prelength + mainlength)
    if ( stoprun == 1) return
    
    logfile=$o1
    tlog=$o2
    Vlog_soma=$o3
    Vlog_axon=$o4
    
    logsize = tlog.size()
    
    for i=0,tlog.size()-1 {
	logfile.printf("%g %g %g\n", tlog.x[i], Vlog_soma.x[i], Vlog_axon.x[i])
    }

}


//*************User-Interface*******************************************

nrnsecmenu(0.5, 1)

xpanel("Spontaneous firing")
xvalue("Time for Initialization", "prelength")
xvalue("Main duration", "mainlength")

xvalue("dt", "dt")
xvalue("t", "t")
xlabel("")
xbutton("Start", "simulate()")
xbutton("Stop", "stoprun = 1")
xpanel()

vec_sizes = (prelength+mainlength)/dt + 1	// recorded traces are all this size

stimdur = 1000

objectvar stim1
gc.soma stim1 = new IClamp(0.5)
stim1.del = prelength
stim1.dur = stimdur
stim1.amp = 0.3

objref nil, nc, spikelog
spikelog = new Vector()
gc.soma nc = new NetCon(&gc.soma.v(.5), nil)
nc.threshold = -43.5
nc.record(spikelog)

/*
objref  iklog
iklog = new Vector(vec_sizes)
iklog.record (&gc.soma.ik(0.5))
*/

objref  Vlog_soma
Vlog_soma = new Vector(vec_sizes)
Vlog_soma.record (&gc.soma.v(0.5))

objref  Vlog_axon
Vlog_axon = new Vector(vec_sizes)
Vlog_axon.record (&gc.axon[2].v(0.8))

objref tlog
tlog = new Vector(vec_sizes,0)
tlog.record (&t)

objref logfile
logfile = new File()
logfile.wopen ( "GC_protocol.dat" )

print "DC input resistance of cell is ", rn(gc), "MOhm"
simulate(logfile,tlog,Vlog_soma,Vlog_axon)
logfile.close()


print "number of spikes is ", spikelog.size()
objref spikefile
spikefile = new File()
spikefile.wopen ( "GC_spikes.dat" )
for i=0,spikelog.size()-1 {
    spikefile.printf("%g\n", spikelog.x[i])
}
spikefile.close()


