
load_file("nrngui.hoc")
load_file("netparmpi.hoc")

// Load the granule cell template
xopen("DGC_template_from_file_na8st.hoc")
xopen ("rn.hoc")

vinit = -75.0


//**********************************************************************
proc simulate() { local prelength, mainlength, preDT, mainDT, logsize  localobj logfile, tlog, Vlog_soma, Vlog_axon, Vlog_dends, Vlog_dend
    
    
    prelength = $1
    mainlength = $2
    logfile=$o3
    tlog=$o4
    Vlog_soma=$o5
    Vlog_axon=$o6
    Vlog_dends=$o7
    
    mainDT = 0.025
    preDT = 0.025
    
    finitialize(vinit)
    
    cvode_active (1)
    
    dt = preDT
    tstop = prelength
    fadvance()
    
    if ( stoprun == 1) return
    
    dt = mainDT
    continuerun(prelength + mainlength)
    if ( stoprun == 1) return
    
    logsize = tlog.size()
    
    for i=0,tlog.size()-1 {
	logfile.printf("%g %g %g", tlog.x[i], Vlog_soma.x[i], Vlog_axon.x[i])
        if (Vlog_dends.count() > 0) {
            for j=0,Vlog_dends.count()-1 {
                Vlog_dend = Vlog_dends.object(j)
                logfile.printf(" %g", Vlog_dend.x[i])
            }
        }
        logfile.printf("\n")
    }
    
}


proc passive_test() { local gid, prelength, mainlength, vec_sizes, stimdur localobj gc, stim1, Vlog_soma, Vlog_axon, Vlog_dends, tlog, logfile strdef forest_path, results_path
    
    
    forest_path = $s1
    results_path = $s2
    gid = $3
    
    print "passive_test: gid = ", gid

    strdef log_fn, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn
    
    prelength = 1000
    mainlength = 2000
    
    vec_sizes = (prelength+mainlength)/dt + 1	// recorded traces are all this size
    
    stimdur = 500.0
    
    sprint(dims_fn, "%s/DGC_dims_%06d.dat", forest_path, gid)
    sprint(points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, gid)
    sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, gid)
    sprint(dendrite_soma_topology_fn, "%s/DGC_dendrite_soma_topology_%06d.dat", forest_path, gid)
    sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, gid)
    
    gc = new DGC(1, gid, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn)
    
    gc.soma stim1 = new IClamp(0.5)
    stim1.del = prelength
    stim1.dur = stimdur
    stim1.amp = -0.1
    
    Vlog_soma = new Vector(vec_sizes)
    Vlog_soma.record (&gc.soma.v(0.5))
    
    Vlog_axon = new Vector(vec_sizes)
    Vlog_axon.record (&gc.axon[2].v(0.8))
    
    Vlog_dends = new List()

    tlog = new Vector(vec_sizes,0)
    tlog.record (&t)
    
    logfile = new File()
    sprint (log_fn, "%s/DGC_passive_%06d.dat", results_path, gid )
    logfile.wopen ( log_fn )
    
    simulate(prelength,mainlength,logfile,tlog,Vlog_soma,Vlog_axon,Vlog_dends)
    logfile.close()
    
    // attempt to compute membrane time constant
    vrest  = -75.0
    vmin   = Vlog_soma.min()
    vmax   = vrest
    amp23  = 0.67 * abs (vmax - vmin)
    vtau0  = vrest - amp23
    tau0   = tlog.x[Vlog_soma.indwhere ("<=", vtau0)] - prelength
    
    logfile = new File()
    sprint (log_fn, "%s/DGC_passive_results_%06d.dat", results_path, gid )
    logfile.wopen ( log_fn )
    
    logfile.printf ("DC input resistance: %g MOhm\n", rn(gc))
    logfile.printf ("vmin: %g mV\n", vmin)
    logfile.printf ("vtau0: %g mV\n", vtau0)
    logfile.printf ("tau0: %g ms\n", tau0)
    
    logfile.close()
}




proc single_ap_test() { local i, j, gid, prelength, mainlength, vec_sizes, stimdur, dendlog_interval, dendlog_distance, dendlog_found, vsoma_amp, vdend_amp localobj gc, stim1, Vlog_soma, Vlog_dend, Vlog_dends, Vlog_axon, tlog, logfile, vderiv, vderiv2, vdend_max, vdend_min strdef forest_path, results_path
    
    forest_path = $s1
    results_path = $s2
    gid = $3
    
    print "single_ap_test: gid = ", gid

    strdef log_fn, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn
    
    prelength = 1000
    mainlength = 2000
    
    vec_sizes = (prelength+mainlength)/dt + 1	// recorded traces are all this size
    
    stimdur = 1.0
    
    sprint(dims_fn, "%s/DGC_dims_%06d.dat", forest_path, gid)
    sprint(points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, gid)
    sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, gid)
    sprint(dendrite_soma_topology_fn, "%s/DGC_dendrite_soma_topology_%06d.dat", forest_path, gid)
    sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, gid)
    
    gc = new DGC(0, gid, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn)
    
    gc.soma stim1 = new IClamp(0.5)
    stim1.del = prelength
    stim1.dur = stimdur
    stim1.amp = 1.0
    
    Vlog_soma = new Vector(vec_sizes)
    Vlog_soma.record (&gc.soma.v(0.5))
    
    Vlog_axon = new Vector(vec_sizes)
    Vlog_axon.record (&gc.axon[2].v(0.8))
    
    // Record from several dendritic locations, 
    // approximately dendlog_interval apart
    Vlog_dends = new List()
    dendlog_interval = 80 //um
    dendlog_distance = dendlog_interval //um
    dendlog_found = 0
    for i=0,2 {
        
        Vlog_dend = new Vector(vec_sizes)
        Vlog_dends.append(Vlog_dend)
        
        gc.soma { distance() }
        
        for j=0, gc.nDends-1 gc.dendrites[j] { 
	    for (x,0) {
                dist = distance(x)
                if (dist >= dendlog_distance) {
                    printf ("Vlog_dend: dist = %g\n", dist)
                    Vlog_dend.record (&gc.dendrites[j].v(0.5))
                    dendlog_found = 1
                    pop_section()
                    break
                }
            }
            if (dendlog_found) {
                dendlog_found = 0
                break
            }
        }
        dendlog_distance = dendlog_distance + dendlog_interval
    }
    
    tlog = new Vector(vec_sizes,0)
    tlog.record (&t)
    
    logfile = new File()
    sprint (log_fn, "%s/DGC_single_ap_%06d.dat", results_path, gid )
    logfile.wopen ( log_fn )
    
    simulate(prelength,mainlength,logfile,tlog,Vlog_soma,Vlog_axon,Vlog_dends)
    logfile.close()
    
    vmax = Vlog_soma.max()
    vmin = Vlog_soma.min()
    
    //
    // AP threshold estimation based on Kress et al. J Neurophysiol 2008
    //
    // AP threshold is the somatic membrane potential corresponding to 5%
    // of the first peak amplitude in the second derivative of V w.r.t to time
    // (i.e. d^2 V/d^2 t)
    //
    
    vderiv = new Vector()
    vderiv2 = new Vector()
    
    vderiv.deriv (Vlog_soma, 0.1, 2)
    vderiv2.deriv (vderiv, 0.1, 2)
    vd2max = vderiv2.max()
    vd2spike = 0.05 * vd2max
    vd2max_index = vderiv2.indwhere (">=", vd2max)
    
    // Attempt to locate the index where vderiv2[x] ~= vd2spike 
    // (i.e. 5% of the maximum d^2 V / d^2 t)
    
    i = vd2max_index
    vd2spike_index = -1
    while (i > 0) {
        
        if (vderiv2.x[i] > vd2spike) {
            i = i-1
        } else {
            vd2spike_index = i
            break
        }
    }
    
    if (!(vd2spike_index > 0)) {
        execerror ("Unable to find vd2spike value")
    }
    
    vthresh = Vlog_soma.x[vd2spike_index]
    
    vdend_max = new Vector(Vlog_dends.count())
    vdend_min = new Vector(Vlog_dends.count())
    
    for i=0,Vlog_dends.count()-1 {
        
        Vlog_dend = Vlog_dends.object(i)
        vdend_max.x[i] = Vlog_dend.max()
        vdend_min.x[i] = Vlog_dend.min()
    }
    
    logfile = new File()
    sprint (log_fn, "%s/DGC_single_ap_results_%06d.dat", results_path, gid )
    logfile.wopen ( log_fn )
    
    logfile.printf ("maximum Vsoma: %g mV\n", vmax)
    logfile.printf ("minumum Vsoma: %g mV\n", vmin)
    
    logfile.printf ("5%% of maximum of vderiv2: t = %g ms, Vsoma = %g mV\n", (tlog.x[vd2spike_index]), (Vlog_soma.x[vd2spike_index]))
    
    logfile.printf ("AP amplitude relative to threshold: %g mV\n", vmax-vthresh)
    logfile.printf ("AHP relative to Vrest: %g mV\n", vmin-vinit)
    
    vsoma_amp = vmax-vmin
    for i=0,vdend_max.size()-1 { 
        vdend_amp = vdend_max.x[i]-vdend_min.x[i]
        logfile.printf ("Relative amplitude of AP in dendrite %d: %g\n", i, vdend_amp/vsoma_amp)
    }
    
    logfile.close()
    
}


proc ap_rate_test() { local gid, prelength, mainlength, vec_sizes, stimdur, tspike, isimean, isivar, isistdev localobj gc, stim1, Vlog_soma, Vlog_axon, Vlog_dends, tlog, logfile, nil, nc, spikelog, spikefile, isivect strdef forest_path, results_path
    
    forest_path = $s1
    results_path = $s2
    gid = $3
    
    print "ap_rate_test: gid = ", gid
    
    strdef spikelog_fn, log_fn, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn
    
    prelength = 1000
    mainlength = 2000
    
    vec_sizes = (prelength+mainlength)/dt + 1	// recorded traces are all this size
    
    stimdur = 1000
    
    sprint(dims_fn, "%s/DGC_dims_%06d.dat", forest_path, gid)
    sprint(points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, gid)
    sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, gid)
    sprint(dendrite_soma_topology_fn, "%s/DGC_dendrite_soma_topology_%06d.dat", forest_path, gid)
    sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, gid)
    
    gc = new DGC(0, gid, dims_fn, points_fn, dendrite_topology_fn, dendrite_soma_topology_fn, spine_density_fn)
    
    gc.soma stim1 = new IClamp(0.5)
    stim1.del = prelength
    stim1.dur = stimdur
    stim1.amp = 0.3
    
    spikelog = new Vector()
    gc.soma nc = new NetCon(&gc.soma.v(.5), nil)
    nc.threshold = -43.5
    nc.record(spikelog)
    
    Vlog_soma = new Vector(vec_sizes)
    Vlog_soma.record (&gc.soma.v(0.5))
    
    Vlog_axon = new Vector(vec_sizes)
    Vlog_axon.record (&gc.axon[2].v(0.8))
    
    Vlog_dends = new List()

    tlog = new Vector(vec_sizes,0)
    tlog.record (&t)
    
    logfile = new File()
    sprint (log_fn, "%s/DGC_ap_rate_%06d.dat", results_path, gid )
    logfile.wopen ( log_fn )
    
    simulate(prelength,mainlength,logfile,tlog,Vlog_soma,Vlog_axon,Vlog_dends)
    logfile.close()
    
    spikefile = new File()
    sprint (spikelog_fn, "%s/DGC_spikes_%06d.dat", results_path, gid )
    spikefile.wopen ( spikelog_fn )
    for i=0,spikelog.size()-1 {
        spikefile.printf("%g\n", spikelog.x[i])
    }
    
    
    isivect = new Vector(spikelog.size()-1, 0.0)
    tspike = spikelog.x[0]
    for i=1,spikelog.size()-1 {
        isivect.x[i-1] = spikelog.x[i]-tspike
        tspike = spikelog.x[i]
    }
    
    isimean = isivect.mean()
    isivar = isivect.var()
    isistdev = isivect.stdev()
    
    spikefile.printf ("## number of spikes: %g\n", spikelog.size())
    spikefile.printf ("## FR mean: %g\n", 1/isimean)
    spikefile.printf ("## ISI mean: %g\n", isimean) 
    spikefile.printf ("## ISI variance: %g\n", isivar)
    spikefile.printf ("## ISI stdev: %g\n", isistdev)
    spikefile.printf ("## ISI adaptation: %g\n", (isivect.x[0]/isimean))
    
    spikefile.close()
    
}


proc main() { local i, ij, gid strdef cmd, local_forest_path, local_results_path
    
    // task_id and batch_size are variables that should be set on the
    // command line, e.g. nrniv -c "task_id=1" -c "batch_size=20"
    
    load_file ("DGC_test_from_forest_config.hoc")
    
    sprint (local_forest_path, "%s/%03d", forest_path, task_id)
    sprint (local_results_path, "%s/%03d", results_path, task_id)
    
    sprint(cmd, "mkdir -p %s", local_results_path)
    system(cmd)
    
    for (gid=task_id; gid <= ncells; gid += batch_size)  {
        
        passive_test (local_forest_path, local_results_path, gid)
        single_ap_test (local_forest_path, local_results_path, gid)
        ap_rate_test (local_forest_path, local_results_path, gid)
    }
}

main()

