
begintemplate DGC

// GCL - granular layer dendrite
// PD - proximal dendrite
// MD - middle dendrite
// DD - distal dendrite

//
// Synaptic connections are organized by type of pre-synaptic cell:
//
// syns_GC - connections from other granule cells
// syns_MC - connections from mossy cells
// syns_HC - connections from HIPP cells
// syns_BC - connections from PV+ basket cells
// syns_AA - connections from axo-axonic cells
// syns_HCC - connections from HICAP cells
// syns_NGFC_GABAA, syns_NGFC_GABAB - connections from neurogliaform cells
//

public connect2target, is_art, is_connected
public soma, axon, dendrites
public all, allaxons, alldendrites
public nDends, nGCLD, nPD, nMD, nDD
public syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB 
public syn_stim

public ndendpts
public verbose

verbose = 1
gid = -1
random_stream_offset = 0

create soma[1], axon[4], dendrites[1]

objref GCLDs, PDs, MDs, DDs, all, allaxons, alldendrites
objref rates_soma, rates_axon, rates_seg
objref gna_y_axon, gna_y_dend, dist_x_dend, dist_x_axon
objref GCLDidxs, PDidxs, MDidxs, DDidxs, ndendpts
objref syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB
objref syn_stim

strdef forest_path
strdef dendrite_dims_fn, dendrite_points_fn
strdef dendrite_soma_topology_fn, dendrite_topology_fn
strdef spine_density_fn

xopen("DGC_Parameters_na8st.hoc")
xopen("DGC_Morphology_from_file_na8st.hoc")
xopen("DGC_Biophysics_na8st.hoc")
xopen("DGC_Synapses.hoc")

proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}

proc read_Na_rates() { localobj fileS, fileA
    
    strdef fname

    rates_soma = new Vector()
    rates_axon = new Vector()
    
    fileS = new File()
    fileA = new File()

    sprint(fname,"%sdat/soma_st8.dat",getcwd())    
    fileS.ropen(fname)
    sprint(fname,"%sdat/axon_st8.dat",getcwd())    
    fileA.ropen(fname)
    
    while (fileS.eof==0){
	rates_soma.append( fileS.scanvar() )
	rates_axon.append( fileA.scanvar() )
    }
    
    fileS.close()
    fileA.close()
}


proc init() {
    
    gid = $1
    random_stream_offset = $2
    forest_path = $s3
    
    if (numarg() > 3) {
        verbose = $4
    }
    
    sprint(dendrite_dims_fn, "%s/DGC_dims_%06d.dat", forest_path, gid)
    sprint(dendrite_points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, gid)
    sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, gid)
    sprint(dendrite_soma_topology_fn, "%s/DGC_dendrite_soma_topology_%06d.dat", forest_path, gid)
    sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, gid)
    
    if (verbose) {
        printf ("dendrite dimensions filename = %s\n", dendrite_dims_fn)
        printf ("dendrite points filename = %s\n", dendrite_points_fn)
        printf ("dendrite topology filename = %s\n", dendrite_topology_fn)
        printf ("dendrite/soma topology filename = %s\n", dendrite_soma_topology_fn)
        printf ("spine density filename = %s\n", spine_density_fn)
    }
    
    parameters()
    read_Na_rates()
    celldef()
}

proc celldef() {
    
    GCLDidxs = new Vector()
    PDidxs   = new Vector()
    MDidxs   = new Vector()
    DDidxs   = new Vector()
    
    syns = new List()
    syns_GC   = new List()
    syns_MC   = new List()
    syns_HC   = new List()
    syns_BC   = new List()
    syns_AA   = new List()
    syns_HCC  = new List()
    syns_NGFC_GABAA = new List()
    syns_NGFC_GABAB = new List()

    syns.append(syns_GC)    
    syns.append(syns_MC)    
    syns.append(syns_HC)    
    syns.append(syns_BC)    
    syns.append(syns_AA)    
    syns.append(syns_HCC)    
    syns.append(syns_NGFC_GABAA)
    syns.append(syns_NGFC_GABAB)

    topol()
    subsets()
    geom()
    geom_spines()
    biophys()
    synapses()
}

func is_art()  { return 0 }

obfunc connect2target() { localobj nc // $o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}

endtemplate DGC
