/*////////////// Topology and geometry //////////////// */

func lambda_f() { local i, x1, x2, d1, d2, lam
    if (n3d() < 2) {
        return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
    }
    x1 = arc3d(0)
    d1 = diam3d(0)
    lam = 0
    for i=1, n3d()-1 {
        x2 = arc3d(i)
        d2 = diam3d(i)
        lam += (x2 - x1)/sqrt(d1 + d2)
        x1 = x2   d1 = d2
    }
    //  length of the section in units of lambda
    lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)
    
    return L/lam
}

func vector_slice() { local p, n localobj src, dest
    
    p    = $3
    src  = $o2
    dest = $o1
    
    n = src.x[p]
    
    dest.copy (src, p+1, p+n)
    
    return p+n+1
}


proc topol_from_file() { local i,j,p localobj f, dims, m
    
    f = new File ()
    
    f.ropen (dendrite_dims_fn)
    dims = new Vector()
    dims.scanf (f)
    f.close()
    
    p = 0
    p = vector_slice (GCLDidxs, dims, p)
    p = vector_slice (PDidxs, dims, p)
    p = vector_slice (MDidxs, dims, p)
    p = vector_slice (DDidxs, dims, p)
    
    nGCLD  = GCLDidxs.size()
    nPD    = PDidxs.size()
    nMD    = MDidxs.size()
    nDD    = DDidxs.size()
    nDends = nGCLD+nPD+nMD+nDD
    
    ndendpts  = new Vector()
    ndendpts.copy (dims, p, -1)
    if (verbose) {
        printf ("dendrite dimensions = ")
        dims.printf()
        printf ("GCL compartment indices = ")
        GCLDidxs.printf()
        printf ("PD compartment indices = ")
        PDidxs.printf()
        printf ("MD compartment indices = ")
        MDidxs.printf()
        printf ("DD compartment indices = ")
        DDidxs.printf()
        printf ("Dendritic compartment point counts = ")
        ndendpts.printf()
        printf ("Total dendritic compartment point count = %d\n", ndendpts.sum ())
    }
    
    assert (ndendpts.size() == nDends,  "ndendpts is not the same length as the number of dendritic compartments")
    
    create dendrites[nDends]
    
    f.ropen (dendrite_topology_fn)
    m = new Matrix()
    m.scanf (f)
    f.close()
    
    if (verbose) {
        printf ("dendrite topology matrix = ")
        m.printf()
    }
    
    for p = 0, m.nrow-1 {
        i = m.getval(p,1)
        j = m.getval(p,0)
        if (verbose) {
            printf ("connecting dendrites[%d] and dendrites[%d]\n", i, j)
        }
        assert (i < nDends,  "compartment index in topology matrix is greater than the number of dendritic compartments")
        assert (j < nDends,  "compartment index in topology matrix is greater than the number of dendritic compartments")
        connect dendrites[j](0),dendrites[i](1)
    }
    
    f.ropen (dendrite_soma_topology_fn)
    m = new Matrix()
    m.scanf (f)
    f.close()
    
    if (verbose) {
        printf ("dendrite/soma topology matrix = ")
        m.printf()
    }
    
    for p = 0, m.nrow-1 {
        i = m.getval(p,1)
        j = m.getval(p,0)
        if (verbose) {
            printf ("connecting dendrites[%d] and soma\n", i, j)
        }
        assert (i < nDends,  "compartment index in topology matrix is greater than the number of dendritic compartments")
        connect dendrites[j](0),soma(1)
    }

}

proc topol() { local i
    connect axon(0), soma(0)
    for i = 1, 3 connect axon[i](0), axon[i-1](1)
    topol_from_file()
    shape()
}

proc shape() {
    
    soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
    
    axon {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(30, 0, 0, 1)}
    axon[1] {pt3dclear() pt3dadd(30, 0, 0, 1) pt3dadd(45, 0, 0, 1)}
    axon[2] {pt3dclear() pt3dadd(45, 0, 0, 1) pt3dadd(60, 0, 0, 1)}
    axon[3] {pt3dclear() pt3dadd(60, 0, 0, 1) pt3dadd(120, 0, 0, 1)}
    
    shape_from_file()
}


proc shape_from_file() { local i,j,k localobj f, m
    
    f = new File ()
    
    f.ropen (dendrite_points_fn)
    m = new Matrix()
    m.scanf (f)
    f.close()
    
    assert (m.nrow == ndendpts.sum(),  "dendritic point matrix is of different size that number of points in ndendpts")
    
    if (verbose) {
        if (verbose >= 2) {
            printf ("dendrite point matrix = ")
            m.printf()
        }
        printf ("dendrite point matrix dimensions =  %d, %d\n", m.nrow, m.ncol)
    }
    
    k = 0
    for i=0, nDends-1 dendrites[i] { 
        for j=0, ndendpts.x[i]-1 {
            pt3dadd(m.getval(k,0), m.getval(k,1), m.getval(k,2), m.getval(k,3))
            k = k+1
        }
    }
}


proc subsets() { local i

  all = new SectionList()
  soma all.append()
  for i=0, 3 axon[i] all.append()
  for i=0, nDends-1 dendrites[i] all.append()
  
  alldendrites = new SectionList()
  GCLDs = new SectionList()
  PDs = new SectionList()
  MDs = new SectionList()
  DDs = new SectionList()
  
  for i=0, nDends-1 dendrites[i] alldendrites.append()
  
  for i=0, nGCLD-1 dendrites[GCLDidxs.x[i]] GCLDs.append()
  for i=0, nPD-1 dendrites[PDidxs.x[i]] PDs.append()
  for i=0, nMD-1 dendrites[MDidxs.x[i]] MDs.append()
  for i=0, nDD-1 dendrites[DDidxs.x[i]] DDs.append()

  allaxons = new SectionList()
  for i=0, 3 axon[i] allaxons.append()
}

proc geom() {
    
    forsec allaxons {  L = 50  }
    
    axon.diam = 0.9
    axon[1].diam = 0.7
    axon[2].diam = 0.5
    axon[3].diam = 0.4
    axon[3] {  L = 1200  }
    
    for (i = 0; i < 4; i = i+1) {
        axon[i] { printf ("axon area[%d] = %g\n", i, area(0.5)) }
    }
    
    soma {  L = 16.8  diam = 16.8 }
    
    geom_nseg()
}


proc geom_spines() { localobj spine_density, f
    
    f = new File()
    f.ropen (spine_density_fn)
    spine_density = new Vector()
    spine_density.scanf (f)
    f.close()

    for (i = 0; i < nDends; i = i+1) dendrites[i] {
        insert spines
        scale_spines = spine_density.x[i]
        
    }
}

proc geom_nseg() { local freq, d_lambda
    
    freq = 100 // Hz, frequency at which AC length constant will be computed
    d_lambda = 0.1
    
    soma area(0.5)
    forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }
    

}
