
begintemplate DGC

// GCL - granular layer dendrite
// PD - proximal dendrite
// MD - middle dendrite
// DD - distal dendrite

//
// Synaptic connections are organized by type of pre-synaptic cell:
//
// syns_GC - connections from other granule cells
// syns_MC - connections from mossy cells
// syns_HC - connections from HIPP cells
// syns_BC - connections from PV+ basket cells
// syns_AA - connections from axo-axonic cells
// syns_HCC - connections from HICAP cells
// syns_NGFC - connections from neurogliaform cells
//

public soma, axon, dendrites
public all, allaxons, alldendrites, alldendritesList
public nDends, nGCLD, nPD, nMD, nDD
public GCLDidxs, PDidxs, MDidxs, DDidxs
public syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB, syns_LPP, syns_MPP
public ndendpts
public verbose, binarymode
public addSyn, syntest, syntest_up, synpulsetest
public syn_stim
public is_art, connect2target

verbose = 0
binarymode = 1
id  = -1
gid = -1
random_stream_offset = 0

create soma[1], axon[4], dendrites[1]

objref GCLDs, PDs, MDs, DDs, all, allaxons, alldendrites, alldendritesList
objref rates_soma, rates_axon, rates_seg
objref gna_y_axon, gna_y_dend, dist_x_dend, dist_x_axon
objref GCLDidxs, PDidxs, MDidxs, DDidxs, ndendpts
objref GCLDweights, PDweights, MDweights, DDweights, GCLPDweights, MDDweights, GCLPDidxs, MDDidxs
objref syns, syns_GC, syns_MC, syns_HC, syns_BC, syns_AA, syns_HCC, syns_NGFC_GABAA, syns_NGFC_GABAB, syns_LPP, syns_MPP
objref syn_stim
objref nodesecmap

strdef forest_path
strdef layer_topology_fn, section_topology_fn, dendrite_topology_fn, soma_topology_fn, dendrite_points_fn, spine_density_fn
strdef layer_index_topology_fn, section_index_topology_fn, dendrite_index_topology_fn, soma_index_topology_fn, dendrite_points_index_fn, spine_density_index_fn


xopen("DGC_Parameters_passive_na8st.hoc")
xopen("DGC_Morphology_from_file_na8st.hoc")
xopen("DGC_Biophysics_passive_na8st.hoc")
xopen("DGC_Synapses.hoc")


proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}

proc read_Na_rates() { localobj fileS, fileA
    
    rates_soma = new Vector()
    rates_axon = new Vector()
    
    fileS = new File()
    fileA = new File()
    
    fileS.ropen("./dat/soma_st8.dat")
    fileA.ropen("./dat/axon_st8.dat")
    
    while (fileS.eof==0){
	rates_soma.append( fileS.scanvar() )
	rates_axon.append( fileA.scanvar() )
    }
    
    fileS.close()
    fileA.close()
}


proc init() {
    
    id  = $1
    gid = $2
    random_stream_offset = $3
    forest_path = $s4
    
    if (numarg() > 4) {
        verbose = $5
    }
    
    if (binarymode) {
        sprint(layer_topology_fn, "%s/topology-layers.bin", forest_path)
        sprint(section_topology_fn, "%s/topology-sections.bin", forest_path)
        sprint(dendrite_topology_fn, "%s/topology-dend.bin", forest_path)
        sprint(soma_topology_fn, "%s/topology-soma.bin", forest_path)
        sprint(dendrite_points_fn, "%s/points.bin", forest_path)
        sprint(spine_density_fn, "%s/spines.bin", forest_path)
        
        sprint(layer_topology_index_fn, "%s/topology-layers.index.bin", forest_path)
        sprint(section_topology_index_fn, "%s/topology-sections.index.bin", forest_path)
        sprint(dendrite_topology_index_fn, "%s/topology-dend.index.bin", forest_path)
        sprint(soma_topology_index_fn, "%s/topology-soma.index.bin", forest_path)
        sprint(dendrite_points_index_fn, "%s/points.index.bin", forest_path)
        sprint(spine_density_index_fn, "%s/spines.index.bin", forest_path)
        
    } else {
        sprint(dendrite_topology_fn, "%s/DGC_dendrite_topology_%06d.dat", forest_path, id)
        sprint(dendrite_points_fn, "%s/DGC_dendrite_points_%06d.dat", forest_path, id)
        sprint(spine_density_fn, "%s/DGC_spine_density_%06d.dat", forest_path, id)
    }
    
    if (verbose) {
        printf ("dendrite topology filename = %s\n", dendrite_topology_fn)
        printf ("dendrite points filename = %s\n", dendrite_points_fn)
        printf ("spine density filename = %s\n", spine_density_fn)
    }
    
    parameters()
    read_Na_rates()
    celldef()
}

proc celldef() {
    
    GCLDidxs = new Vector()
    PDidxs  = new Vector()
    MDidxs  = new Vector()
    DDidxs  = new Vector()

    syns_GC   = new List()
    syns_MC   = new List()
    syns_HC   = new List()
    syns_BC   = new List()
    syns_AA   = new List()
    syns_HCC  = new List()
    syns_NGFC_GABAA = new List()
    syns_NGFC_GABAB = new List()
    syns_LPP  = new List()
    syns_MPP  = new List()
    syns = new List() 

    syns.append(syns_GC)
    syns.append(syns_MC)
    syns.append(syns_HC)
    syns.append(syns_BC)
    syns.append(syns_AA)
    syns.append(syns_HCC)
    syns.append(syns_NGFC_GABAA)
    syns.append(syns_NGFC_GABAB)
    syns.append(syns_LPP)
    syns.append(syns_MPP)

    topol()
    subsets()
    geom()
    geom_spines()
    biophys()
    synapses()
    
    finitialize(v_init)
}

func is_art()  { return 0 }

obfunc connect2target() { localobj nc // $o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}


endtemplate DGC
