
xopen("DGC_Tests_from_file_passive_na8st.hoc")
xopen("DGC_Synapse_Tests_from_file_na8st.hoc")

load_file("DGC_protocol.ses")

strdef local_forest_path, local_results_path

gid = 307
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/007"
local_results_path = "results"

gid = 827
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/007"
local_results_path = "results"

gid = 016
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/016"
local_results_path = "results"

gid = 134
local_forest_path = "/home/igr/src/model/DGC_forest/dat/110/014"
local_results_path = "results"



gid = 062
local_forest_path = "/home/igr/src/model/DGC_forest/GC"
local_results_path = "results"


gid = 095
local_forest_path = "/home/igr/src/model/DGC_forest/GC"
local_results_path = "results"

gid = 125
local_forest_path = "/home/igr/src/model/DGC_forest/GC"
local_results_path = "results"

gid = 005
local_results_path = "results"

gid = 062
gid = 001
gid = 106
gid = 315

gid = 632


local_forest_path = "/home/igr/src/model/DGC_forest/dat/15"





gid = 2
local_forest_path = "/ssd-scratch/iraikov/DGC_forest/11"
local_results_path = "results"
gid = 304
local_forest_path = "/ssd-scratch/iraikov/DGC_forest/15"
local_results_path = "results"

gid = 005
local_forest_path = "/home/igr/src/model/DGC_forest/dat/10"
local_results_path = "results"

//passive_test(local_forest_path, local_results_path, gid)
//threshold_test(local_forest_path, local_results_path, gid)
//single_ap_test(local_forest_path, local_results_path, gid)
//ap_rate_test(local_forest_path, local_results_path, gid)
//synapse_test(local_forest_path, local_results_path, gid)
pp_synapse_test(local_forest_path, local_results_path, gid)
objref gc
gc = new DGC(gid, 1, local_forest_path, 0)


